PsychoPy2experiment version="2023.1.1"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'group': 'AB'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.1.1
  Window size (pixels) = [1440, 900]
  expName = exp_corregido
  keyboardBackend = ioHub
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Routines
  Routine blank500
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine GoodbyeScreen
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Felicitaciones! estas a punto de terminar el estudio.

        Presiona ESPACIO para terminar.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NewsTrial
    TextComponent text_item
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{str(item)} \n \n Presiona 'q' para responder verdadero o 'p' para responder falso."
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    KeyboardComponent item_response
      allowedKeys [set every repeat] = 'q', 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RecallTrial
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      placeholder [set every repeat] = respuestaaaaaaa
      size = (None, None)
      startVal [time (s)] = 0.0
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    TextComponent text_recall_instruction
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = A continuación escribe el número presentado anteriormente y presiona ENTER para continuar.
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    KeyboardComponent key_resp_4
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine RestScreen
    TextComponent rest_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora puedes descansar...

        Presiona ESPACIO para continuar con el segundo bloque.
    KeyboardComponent rest_end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroRead
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Este estudio se compone de dos partes. En la primera parte tendrás que leer un texto breve y responder algunas preguntas acerca de su contenido. Además tendrás que memorizar una secuencia de números por un corto período de tiempo.

        A continuación verás un texto breve. Leelo con detenimiento. Una vez que avances a las preguntas no podrás volver a leer el texto.

        Para responder las preguntas tendrás que dar un click a la alternativa correcta en la barra inferior de la pantalla.

        Para empezar presiona ENTER.
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine IntroNews
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        En este estudio tendrás que evaluar la veracidad de varias noticias. Además tendrás que memorizar una secuencia de números por un corto período de tiempo.

        El estudio está dividido en dos bloques. Podrás tomar un descanzo al final del segundo bloque.

        Para empezar presiona ENTER.
    KeyboardComponent key_resp
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ReadText
    ImageComponent image
      image = comprension_lectora.png
      pos = (-0.2, 0.04)
      size = (0.9, 0.9)
      startVal [time (s)] = 0.0
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    TextComponent end_button_read
      letterHeight = 0.05
      pos = (0.5, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 0.4
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      text:
        Recuerda: una vez que presiones ENTER no podras volver a leer el texto.

        Para continuar presiona ENTER.
    KeyboardComponent key_resp_5
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NewsLoader
    CodeComponent LoaderCode
      Code Type = Py
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      Begin Experiment:
        # Initialize lists of items and problems
        data_list = []
        problem_list = []
      Begin Routine:
        # Polulate items list
        data_list.append((item_id, item, criteria))
  Routine NewsShuffler
    CodeComponent ShufflerCode
      Code Type = Py
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      Before Experiment:
        from random import shuffle, sample
        #random.seed(1)
      Begin Routine:
        # Polulate items list
        # data_list.append((item_id, item, criteria))

        # Randomize input data
        shuffle(data_list)
        print('data_list length: ', len(data_list))

        # There are 10 true and 26 false items.
        n_true = 16
        half_true = int(n_true/2)
        n_false = 16
        half_false = int(n_false/2)

        # Make two lists, randomize and then join together
        data_true = [x for x in data_list if x[2] == 1]
        data_false = [x for x in data_list if x[2] == 0]

        data_a = data_true[0:half_true] + data_false[0:half_false]
        data_b = data_true[half_true:n_true] + data_false[half_false:n_false]

        for x, y, z in data_a:
            print(x, z)

        print('')

        for x, y, z in data_b:
            print(x, z)

        print('')

        shuffle(data_a)
        shuffle(data_b)

        for x, y, z in data_a:
            print(x, z)

        print('')

        for x, y, z in data_b:
            print(x, z)
        data_list = data_a + data_b



        # Get list sizes for blocks
        n_a = len(data_a)
        n_b = len(data_b)

        print(f'n_a: {n_a}')
        print(f'n_b: {n_b}')

        # Get id, item and criteria
        data_list = list(zip(*data_list))
        id_list = list(data_list[0])
        item_list = list(data_list[1])
        criteria_list = list(data_list[2])

        # Populate problem list
        for i in range(len(item_list)):
            numbers = sample(range(1, 10), 5)
            string_numbers = ''.join(str(x) for x in numbers)
            problem_list.append(string_numbers)
  Routine ReadLoader
    CodeComponent LoadReadCode
      Code Type = Py
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      Begin Experiment:
        # Initialize lists of items and problems
        reading_list = []
        digits_list = []
      Begin Routine:
        # Polulate items list
        reading_list.append((question_id, str(question), str(choice_a), str(choice_b), str(choice_c), str(choice_d), correct))
  Routine ReadShuffler
    CodeComponent ReadingShufflerCode
      Code Type = Py
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      Begin Routine:
        # Polulate items list
        # reading_list.append((question_id, question, choice_a, choice_b, choice_c, choice_d, correct))

        # Randomize input data
        shuffle(reading_list)
        print('reading_list length: ', len(data_list))

        # Get id, item and criteria
        reading_list = list(zip(*reading_list))
        question_id_list = list(reading_list[0])
        question_list = list(reading_list[1])
        choice_a_list = list(reading_list[2])
        choice_b_list = list(reading_list[3])
        choice_c_list = list(reading_list[4])
        choice_d_list = list(reading_list[5])
        correct_list = list(reading_list[6])

        # Populate problem list
        for i in range(len(question_list)):
            numbers = sample(range(1, 10), 4)
            string_numbers = ''.join(str(x) for x in numbers)
            digits_list.append(string_numbers)
  Routine NumberA
    CodeComponent NumberPresentCode
      Code Type = Py
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      Begin Experiment:
        # Counter for items and problems
        current_item = -1
      Begin Routine:
        # Update counter at each trial
        current_item += 1

        # Update item and problem variables
        item = item_list[current_item]
        item_id = id_list[current_item]
        item_target = criteria_list[current_item]

        number_string = problem_list[current_item]
      End Routine:
        # Save item and math problem info to file
        thisExp.addData('item', item)
        thisExp.addData('item_id', item_id)
        thisExp.addData('item_target', item_target)
        thisExp.addData('number_string', number_string)
    TextComponent text_number_a
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Recuerda este número: {str(number_string)} \n \n Presiona ENTER para continuar."
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    KeyboardComponent number_presentation_key_a
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NumberB
    CodeComponent NumberPresentCode_2
      Code Type = Py
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      Begin Routine:
        # Update counter at each trial
        current_item += 1

        # Update item and problem variables
        item = item_list[current_item]
        item_id = id_list[current_item]
        item_target = criteria_list[current_item]

        number_string = problem_list[current_item]
      End Routine:
        # Save item and math problem info to file
        thisExp.addData('item', item)
        thisExp.addData('item_id', item_id)
        thisExp.addData('item_target', item_target)
        thisExp.addData('number_string', number_string)
    TextComponent text_number_b
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Recuerda este número: {str(number_string)} \n \n Presiona ENTER para continuar."
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    KeyboardComponent number_presentation_key_b
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DigitA
    CodeComponent DigitPresentCode
      Code Type = Py
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      Begin Experiment:
        # Counter for questions and digits
        current_question = -1
      Begin Routine:
        # Update counter at each trial
        current_question += 1

        # Update item and problem variables
        question = question_list[current_question]
        question_id = question_id_list[current_question]
        choice_a = choice_a_list[current_question]
        choice_b = choice_b_list[current_question]
        choice_c = choice_c_list[current_question]
        choice_d = choice_d_list[current_question]
        correct = correct_list[current_question]

        digit_string = digits_list[current_question]
      End Routine:
        # Save item and math problem info to file
        thisExp.addData('question', question)
        thisExp.addData('question_id', question_id)
        thisExp.addData('choice_a', choice_a)
        thisExp.addData('choice_b', choice_b)
        thisExp.addData('choice_c', choice_c)
        thisExp.addData('choice_d', choice_d)
        thisExp.addData('correct', correct)
        thisExp.addData('digit_string', digit_string)
    TextComponent text_number_x
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Recuerda este número: {str(digit_string)} \n \n Presiona ENTER para continuar."
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    KeyboardComponent number_presentation_key_x
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ReadTrial
    TextComponent text_question
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"{str(question)} \n \n A) {str(choice_a)} \n \n B) {str(choice_b)} \n \n C) {str(choice_c)} \n \n D) {str(choice_d)} \n \n "
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = (f"A", f"B", f"C", f"D")
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4)
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  Routine DigitB
    CodeComponent DigitPresentCodeB
      Code Type = Py
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      Begin Routine:
        # Update counter at each trial
        current_question += 1

        # Update item and problem variables
        question = question_list[current_question]
        question_id = question_id_list[current_question]
        choice_a = choice_a_list[current_question]
        choice_b = choice_b_list[current_question]
        choice_c = choice_c_list[current_question]
        choice_d = choice_d_list[current_question]

        digit_string = digits_list[current_question]
      End Routine:
        # Save item and math problem info to file
        thisExp.addData('question', question)
        thisExp.addData('question_id', question_id)
        thisExp.addData('choice_a', choice_a)
        thisExp.addData('choice_b', choice_b)
        thisExp.addData('choice_c', choice_c)
        thisExp.addData('choice_d', choice_d)
        thisExp.addData('digit_string', digit_string)
    TextComponent text_number_y
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f"Recuerda este número: {str(digit_string)} \n \n Presiona ENTER para continuar."
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    KeyboardComponent number_presentation_key_y
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TypedResponse
    TextComponent textInput
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $respDisplay
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    TextComponent textPrompt
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Escribe el número presentado (sólo dígitos) y presiona ENTER para continuar...
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    KeyboardComponent keyResp
      allowedKeys = '0','1','2','3','4','5','6','7','8','9','return','backspace'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent codeResp
      Code Type = Py
      Begin Routine:
        respDisplay = ""
        maxDigits = 5

        #key logger defaults
        last_len = 0
        key_list = []
      Each Frame:
        #if a new key has been pressed since last time

        if(len(keyResp.keys) > last_len):
            #increment the key logger length
            last_len = len(keyResp.keys)

            #grab the last key added to the keys list
            key_list.append(keyResp.keys.pop())

            #check for backspace
            if("backspace" in key_list):
                key_list.remove("backspace")

                #if we have at least 1 character, remove it
                if(len(key_list) > 0):
                    key_list.pop()

            #if enter is pressed then...
            elif("return" in key_list):
                #remove the enter key
                key_list.pop()

                #and end the trial if we have at least 2 digits
                if(len(key_list) >= 2):
                    continueRoutine = False

            #now loop through and remove any extra characters that may exist

            while(len(key_list) > maxDigits):
                key_list.pop()

            #create a variable to display
            respDisplay = ''.join(key_list)
      End Routine:
        thisExp.addData('subjResponse', respDisplay)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = items_noticias_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'item_id': 1, 'item': '“El test PCR no detecta la presencia de COVID-19”.', 'criteria': 0},
      {'item_id': 2, 'item': '“La vacuna contra el COVID-19 puede causar infertilidad”.', 'criteria': 0},
      {'item_id': 3, 'item': '“Las personas asintomáticas no contagian el COVID-19”.', 'criteria': 0},
      {'item_id': 4, 'item': '“CoronaVac es producida a partir de células de bebes abortados”.', 'criteria': 0},
      {'item_id': 5, 'item': '“La vacuna contra el COVID-19 genera atracción magnética”.', 'criteria': 0},
      {'item_id': 6, 'item': '“La patente para testear el COVID-19 se registró en el año 2015”.', 'criteria': 0},
      {'item_id': 7, 'item': '“Nuevo estudio muestra que el test PCR puede producir Alzheimer”.', 'criteria': 0},
      {'item_id': 8, 'item': '“La luz de los termómetros para corporales puede lastimar la vista”.', 'criteria': 0},
      {'item_id': 9, 'item': '“Las vacunas autorizadas contra el COVID-19 contienen grafeno”.', 'criteria': 0},
      {'item_id': 10, 'item': '“El Coronavirus se transmite por las ondas electromagnéticas 5G”.', 'criteria': 0},
      {'item_id': 11, 'item': '“Los vacunados contra el COVID-19 no pueden donar sangre ni órganos”.', 'criteria': 0},
      {'item_id': 12, 'item': '“El plan para la pandemia está diseñado desde 2017 en el Banco Mundial”.', 'criteria': 0},
      {'item_id': 13, 'item': '“La vacuna contra el COVID-19 modifica la estructura molecular de tu ADN”.', 'criteria': 0},
      {'item_id': 14, 'item': '“El dióxido de cloro sirve para tratar a pacientes con COVID-19 positivo”.', 'criteria': 0}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
    Routine NewsLoader
  LoopTerminator trials
  Routine NewsShuffler
  Routine IntroNews
  Routine blank500
  LoopInitiator controlTaskOrder loopType="TrialHandler"
    conditionsFile = $'conditions'+expInfo['group']+'.xlsx'
    isTrials = False
    loopType = sequential
    nReps = 1
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    LoopInitiator block_a loopType="TrialHandler"
      loopType = sequential
      nReps = nRepsTask1
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      Routine NumberA
      Routine NewsTrial
      Routine blank500
      Routine TypedResponse
      Routine blank500
    LoopTerminator block_a
    LoopInitiator rest loopType="TrialHandler"
      loopType = sequential
      nReps = nRepsTask2
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      Routine RestScreen
    LoopTerminator rest
    LoopInitiator block_b loopType="TrialHandler"
      loopType = sequential
      nReps = nRepsTask3
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      Routine NumberB
      Routine TypedResponse
      Routine blank500
      Routine NewsTrial
      Routine blank500
    LoopTerminator block_b
  LoopTerminator controlTaskOrder
  Routine GoodbyeScreen
